CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:images
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:images
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,160
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:images
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FFFF
    Select objects to display:Nuclei

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:images
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:10|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
    Select images to measure:images
    Select objects to measure:Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectIntensityDistribution:[module_num:11|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
    Select images to measure:images
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureGranularity:[module_num:12|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
    Select images to measure:images
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

ExportToSpreadsheet:[module_num:13|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Export_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:14|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MF_table_
    Output file location:Default Output Folder|esults
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB_MF.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MF_new_exp_
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:Phenotype
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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